PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [2048, 1280]
  color = $[-1,-1,-1]
  expName = fiBCIDecoder
  frameRateMsg = +
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine init
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    CodeComponent init_code
      Code Type = Py
      Before Experiment:
        import sys
        import os
        import json
        import warnings
        from psychopy import logging, core

        project_dir = os.path.dirname(os.path.abspath(__file__))
        if project_dir not in sys.path:
            sys.path.insert(0, project_dir)

        # 1. 导入项目模块
        from src.transmission.trans_control.dataController import DataController
        from src.peripheral.camera.MultiCamThreadRecord import (
            init_camera_thread,
            start_camera_thread,
            exit_camera_thread
        )
        from src.peripheral.audio.AudioThreadRecord import (
            init_audio_thread,
            start_audio_thread,
            exit_audio_thread
        )
        from src.utils.exit_handler import patch_core_quit, register_cleanup_function

        # 2. 读取配置文件
        config_path = os.path.join(project_dir, 'config', 'upper_limb_movement_config.json')

        try:
            with open(config_path, 'r', encoding='utf-8') as f:
                config = json.load(f)
            logging.info(f"✓ Config loaded from {config_path}")
        except Exception as e:
            logging.error(f"✗ Failed to load config: {e}")
            config = {}
            # 使用默认值
            warnings.warn("Using default configuration values")

        # 3. 获取配置参数
        ## 3.1 TCP 连接
        host = config.get("experiment", {}).get("host", "127.0.0.1")
        port = config.get("experiment", {}).get("port", 5001)

        ## 3.2 文本大小
        big_text_size = config.get("experiment", {}).get("big_text_size", 0.25)
        small_text_size = config.get("experiment", {}).get("small_text_size", 0.25)

        ## 3.3 循环次数
        trial_repeats = config.get("experiment", {}).get("trial_repetas", 1)
        block_repeats = config.get("experiment", {}).get("block_repeats", 1)

        ## 3.4 任务类型
        task_type = config.get("experiment", {}).get("task_type", 0)
        task_desc = config.get("experiment", {}).get("task_desc", {"0": "粗大", "1": "精细"})

        if task_type == 1:
            selected_rows = "4:7"
            task_num = 3
        else:
            selected_rows = "0:4"
            task_num = 4
            if task_type != 0:
                print("WARNING: 任务类型只能为0或1，默认为0.")

        ## 3.5资源路径
        conditions_file = config.get("experiment", {}).get(
            "conditions",
            r".\resources\conditions\upper_limb_movement\condition.csv"
        )

        block_conditions_file = config.get("experiment", {}).get(
            "block_conditions",
            r".\resources\conditions\upper_limb_movement\block_conditions.csv"
        )

        sound_dir = config.get("experiment", {}).get(
            "sound_dir",
            r".\resources\audios\upper_limb_movement"
        )
        video_dir = config.get("experiment", {}).get(
            "video_dir",
            r".\resources\videos\upperlimb"
        )

        video_direction = config.get("experiment", {}).get("video_direction","right")
        video_dir =os.path.join(video_dir,video_direction)

        ## 3.6 随机种子
        random_seed = config.get("experiment", {}).get("random_seed", 42)

        ## 3.7 日志输出
        logging.info(f"Experiment configuration:")
        logging.info(f"  Host: {host}")
        # logging.info(f"  COM port: {com_port}")
        logging.info(f"  Task type: {task_type} ({task_desc.get(str(task_type), 'unknown')})")
        logging.info(f"  Block repeats: {block_repeats}")
        logging.info(f"  Trial repeats: {trial_repeats}")

        ## 3.8 判断外设的使能情况
        ### camera
        camera_connected_status = config.get("experiment", {}).get("peripheral_stats", {}).get("is_camera_connected", False)

        ### audio
        audio_connected_status = config.get("experiment", {}).get("peripheral_stats", {}).get("is_audio_connected", False)

        # 4. 初始化 DataController
        # fiBCI项目中，不再使用黑盒上位机，而是使用植入体及对应全植入的上位机。
        # 远程连接目前只有后台数据缓存功能，无命令控制协议。
        # 因此无法控制启动，停止，以及打标。
        dc = None
        try:
            dc = DataController(
                host,
                port,
                4,
                500
            )
            # 启动后台数据缓存
        #    dc.connect()
        #    dc.start()
            logging.info("✓ DataController initialized and started")
        except Exception as e:
            logging.error(f"✗ DataController initialization failed: {e}")
            warnings.warn(f"Could not initialize DataController: {e}")
            print(f"ERROR: {e}")

        # 5. 初始化相机录制
        camera_threads = None
        if camera_connected_status:
            try:
                from src.peripheral.camera.MultiCamThreadRecord import Config as CameraConfig

                camera_config_file = os.path.join(project_dir, 'config', 'upper_limb_movement_config.json')
                camera_threads = init_camera_thread()
                start_camera_thread(camera_threads, mode="production")
                logging.info("✓ Camera recording started")
            except Exception as e:
                logging.error(f"✗ Camera initialization failed: {e}")
                warnings.warn(f"Could not start camera recording: {e}")

        # 6. 初始化音频录制
        audio_thread = None
        if audio_connected_status:
            try:
                audio_thread = init_audio_thread()
                start_audio_thread(audio_thread, mode="production")
                logging.info("✓ Audio recording started")
            except Exception as e:
                logging.error(f"✗ Audio initialization failed: {e}")
                warnings.warn(f"Could not start audio recording: {e}")


        # 7. 注册清理函数
        def cleanup_all_resources():
            logging.info("=" * 50)
            logging.info("Cleaning up resources...")

            # 1. 停止 DataRecv
            if dc:
                try:
                    dc.disConnect()
                    logging.info("✓ DataController closed")
                except Exception as e:
                    logging.error(f"✗ Error closing DataController: {e}")

            # 2. 停止音频录制
            if audio_thread:
                try:
                    exit_audio_thread(audio_thread)
                    logging.info("✓ Audio recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping audio: {e}")

            # 3. 停止相机录制
            if camera_threads:
                try:
                    exit_camera_thread(camera_threads)
                    logging.info("✓ Camera recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping cameras: {e}")

            logging.info("=" * 50)
            logging.info("All resources cleaned up")


        ## 7.1 使用上面自定义的清理函数
        register_cleanup_function(cleanup_all_resources)

        # 8. 打补丁到 PsychoPy 的 core.quit()
        patch_core_quit()
        logging.info("✓ Cleanup handlers registered and patched")

        # 9. 设置随机种子
        import random
        import numpy as np

        random.seed(random_seed)
        np.random.seed(random_seed)
        logging.info(f"✓ Random seed set to {random_seed}")

        # 10. 全局变量初始化用于后续的Routine
        logging.info("=" * 50)
        logging.info("Upper Limb Movement Paradigm Initialized")
        logging.info(f"Task: {task_desc.get(str(task_type), 'unknown')}")
        logging.info("=" * 50)
      End Experiment:
        cleanup_all_resources()
    TextComponent init_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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  Routine block_ready
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    CodeComponent br_code
      Code Type = Py
      Begin Routine:
        br_sound_dir = os.path.join(sound_dir, block_audio_name)
    TextComponent br_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $block_stimuli
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    TextComponent br_3
      letterHeight = 0.25
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent br_2
      letterHeight = 0.25
      startVal [time (s)] = 6
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent br_1
      letterHeight = 0.25
      startVal [time (s)] = 7
      stopVal [duration (s)] = 1.0
      text = 1
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    SoundComponent br_sound
      forceEndRoutine = False
      sound [set every repeat] = $br_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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  Routine trial_ready
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    CodeComponent tr_code
      Code Type = Py
      Begin Routine:
        tr_tex = stimuli
        tr_sound_dir = os.path.join(sound_dir, audio_name)
    TextComponent tr_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $tr_tex
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    SoundComponent tr_sound
      forceEndRoutine = False
      sound [set every repeat] = $tr_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine action
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    CodeComponent act_code
      Code Type = Py
      Begin Experiment:
        # 1. 导入在线解码与刺激控制模块
        import os
        import csv
        import json
        from datetime import datetime
        from psychopy import core

        from src.data_streamer.data_streamer import DataStreamer
        from src.decoder.online_inference.ml_decoder.ml_decoder import load_model
        from src.welink_stimulator.stimulator_controller import (
            StimulatorController,
            StimulationParams,
        )

        # 公共函数
        def monotonic_time_s():
            # 统一使用 PsychoPy 单调时钟
            return float(core.monotonicClock.getTime())


        def save_action_decode_logs(log_rows, csv_path):
            # 保存单次 action 的完整解码日志
            if not log_rows:
                return

            os.makedirs(os.path.dirname(csv_path), exist_ok=True)

            fieldnames = [
                "participant",
                "session",
                "block_num",
                "trial_num",
                "action_start_time_s",
                "action_end_time_s",
                "time_in_action_s",
                "data_received_time_s",
                "data_shape",
                "preprocess_time_ms",
                "decode_time_ms",
                "decode_result",
                "confidence",
                "command_sent",
                "command_content",
            ]

            with open(csv_path, "w", newline="", encoding="utf-8") as f:
                writer = csv.DictWriter(f, fieldnames=fieldnames)
                writer.writeheader()
                writer.writerows(log_rows)

        def flush_dc_buffer(dc, fs):
            # 清空缓冲区
            try:
                if hasattr(dc, "getBufferTime"):
                    buffer_time_s = float(dc.getBufferTime())
                    buffer_points = max(0, int(buffer_time_s * fs))
                    if buffer_points > 0:
                        dc.get_data(buffer_points)
                        return buffer_points
            except Exception as e:
                print(f"flush_dc_buffer failed: {e}")

            return 0


        # 2. 读取解码配置
        with open(os.path.join(project_dir, "config", "decoder_config.json"), "r", encoding="utf-8") as f:
            decoder_cfg = json.load(f)

        with open(os.path.join(project_dir, "config", "feature_config.json"), "r", encoding="utf-8") as f:
            feature_cfg = json.load(f)

        # 3. 加载模型
        model_path = os.path.join(project_dir, "pretrained_models", "ml_models", "fine_decoder.pkl")
        model_bundle = load_model(model_path)

        # 4. 初始化刺激器
        stimulator = None
        stimulator_enabled = False
        try:
            with open(os.path.join(project_dir, "config", "upper_limb_movement_config.json"), "r", encoding="utf-8") as f:
                stim_cfg = json.load(f)

            stim_port = stim_cfg.get("experiment", {}).get("stim_com_port", None)

            if stim_port:
                stimulator = StimulatorController(
                    port=stim_port,
                    baudrate=115200,
                    timeout=1.0,
                    debug=False,
                )
                stimulator_enabled = stimulator.connect()
        except Exception as e:
            print(f"Stimulator init failed: {e}")
            stimulator = None
            stimulator_enabled = False

        # 6. 解码类别 -> 刺激参数映射
        stim_param_map = {
            0: None,
            1: StimulationParams(channel="A", current_ma=1.0, pulse_width=2, duration_min=1),
        }

        # action 解码日志目录
        action_decode_log_dir = os.path.join(project_dir, "logs", "action_decode_logs")
        os.makedirs(action_decode_log_dir, exist_ok=True)

        # 7. action routine 运行态变量
        action_start_time_s = 0.0
        action_end_time_s = 0.0
        action_latest_payload = None
        action_latest_result = None
        action_latest_log = None
        action_command_sent = 0
        action_command_text = ""
        action_decode_count = 0
        action_log_cache = []
        action_log_file_path = ""

        # 8. 配置参数
        decode_interval_s = 0.1 # 100ms的编码时间间隔
        decode_window_s = 5.0 # 每次5s的数据时间窗
        stim_duration_ms = int(config.get("experiment", {}).get("stim_duration_ms", 500)) # 刺激持续时间500ms
        window_points = int(decode_window_s * decoder_cfg["fs"]) # 采样点数 = 时间窗 * 采样率
      Begin Routine:
        act_movie_dir = os.path.join(video_dir, video_name)
        act_sound_dir = os.path.join(sound_dir, "开始.wav")


        # 取最新的5s数据，并清空缓冲区
        # 1. 首先重置本次 action 的状态
        action_start_time_s = monotonic_time_s()
        action_end_time_s = 0.0
        action_now_s = 0.0
        action_last_decode_submit_s = -1e9
        action_decode_count = 0
        action_next_decode_id = 1
        action_log_cache = []
        action_pending_log_by_id = {}

        # 本次 action 的独立日志文件
        participant_id = expInfo.get("participant", "unknown")
        session_id = expInfo.get("session", "001")
        timestamp_str = datetime.now().strftime("%Y%m%d_%H%M%S_%f")

        action_log_file_path = os.path.join(
            action_decode_log_dir,
            f"action_decode_p{participant_id}_s{session_id}_b{block_num}_t{trial_num}_{timestamp_str}.csv"
        )

        # 2. 获取最近5s的数据
        initial_decode_data = None
        data_candidate = dc.get_data(window_points)
        if data_candidate is not None and getattr(data_candidate, "size", 0) > 0:
            if data_candidate.ndim == 2 and data_candidate.shape[1] >= window_points:
                initial_decode_data = data_candidate[:, -window_points:]
                break

        # 3. 清空缓冲区
        flushed_points = flush_dc_buffer(dc, int(decoder_cfg["fs"]))
        print(f"flushed buffer points: {flushed_points}")

        # 4. 启动两个线程
        decoder_thread = DecoderThread(
            fs=int(decoder_cfg["fs"]),
            decoder_config=decoder_cfg,
            feature_config=feature_cfg,
            model_bundle=model_bundle,
        )
        decoder_thread.start()

        stim_thread = StimThread(
            stimulator=stimulator if stimulator_enabled else None,
        )
        stim_thread.start()

        # 5. 把第一次拿到的数据进行解码
        first_decode_id = action_next_decode_id
        submit_ok = decoder_thread.submit(
            decode_id=first_decode_id,
            data=initial_decode_data,
            timestamp_s=action_start_time_s,
        )
        if submit_ok:
            action_last_decode_submit_s = action_start_time_s
            action_next_decode_id += 1
      Each Frame:
        action_now_s = monotonic_time_s()
        # 1. 判断时间是否超过100ms，如果超过，就获取新的5s窗口的数据
        if (action_now_s - action_last_decode_submit_s) >= decode_interval_s:
            decode_data = dc.get_data(window_points)
            if not decoder_thread.is_busy():
                decode_id = action_next_decode_id
                # submit新获取的数据
                submit_ok = decoder_thread.submit(
                    decode_id=decode_id,
                    data=decode_data[:, -window_points:],
                    timestamp_s=action_now_s,
                )

                if submit_ok:
                    action_last_decode_submit_s = action_now_s
                    action_next_decode_id += 1

        # 2 解码完成后返回结果
        decode_payload = decoder_thread.consume_result()
        if decode_payload is not None:
            action_decode_count += 1
            decode_id = decode_payload["decode_id"]
            decode_result = decode_payload["result"]

            predicted_target = decode_result.get("predicted_target", None)
            decode_success = bool(decode_result.get("success", False))

            ## 2.1 默认不发刺激
            should_stim = False
            command_label = ""

            ## 2.2 判断是否要发送刺激(任务态 & 存在刺激器 & 刺激器可用需要同时满足)
            if decode_success:
                if predicted_target == 1:
                    if stimulator_enabled and stimulator is not None:
                        if not stim_thread.is_busy():
                            should_stim = True
                            command_label = f"stim_target_{predicted_target}_{stim_duration_ms}ms"

            ## 2.3 如果should_stim=False就不会发送，should_stim的Ture/False状态由线程是否busy决定
            stim_thread.submit(
                decode_id=decode_id,
                should_stim=should_stim,
                params=stim_param_map.get(predicted_target, None),
                duration_ms=stim_duration_ms,
                command_label=command_label,
            )

            # 3. 结果记录
            log_row = {
                "decode_id": decode_id,
                "participant": expInfo.get("participant", "unknown"),
                "session": expInfo.get("session", "001"),
                "block_num": block_num,
                "trial_num": trial_num,
                "action_start_time_s": round(action_start_time_s, 6),
                "action_end_time_s": "",
                "time_in_action_s": round(action_now_s - action_start_time_s, 6),
                "data_received_time_s": decode_payload.get("data_received_time_s", ""),
                "data_shape": str(decode_payload.get("data_shape", "")),
                "preprocess_time_ms": decode_payload.get("preprocess_time_ms", ""),
                "decode_time_ms": decode_payload.get("decode_time_ms", ""),
                "decode_result": predicted_target,
                "confidence": decode_result.get("confidence", ""),
                "command_sent": 0,
                "command_content": "",
            }

            action_log_cache.append(log_row)
            action_pending_log_by_id[decode_id] = len(action_log_cache) - 1

        # 4. 将输出的刺激的状态和内容也一起保存
        stim_payload = stim_thread.consume_result()
        if stim_payload is not None:
            decode_id = stim_payload.get("decode_id", None)

            if decode_id in action_pending_log_by_id:
                row_idx = action_pending_log_by_id.pop(decode_id)

                if 0 <= row_idx < len(action_log_cache):
                    action_log_cache[row_idx]["command_sent"] = stim_payload.get("command_sent", 0)
                    action_log_cache[row_idx]["command_content"] = stim_payload.get("command_content", "")
      End Experiment:
        # 关闭刺激器
        try:
            if stimulator is not None:
                stimulator.disconnect()
        except Exception as e:
            print(f"stimulator.disconnect failed: {e}")
      End Routine:
        action_end_time_s = monotonic_time_s()

        # 1. 停止后台线程
        if decoder_thread is not None:
            decoder_thread.stop()
            if decoder_thread.is_alive():
                decoder_thread.join(timeout=1.0)

        if stim_thread is not None:
            stim_thread.stop()
            if stim_thread.is_alive():
                stim_thread.join(timeout=1.0)

        for row in action_log_cache:
            row["action_end_time_s"] = round(action_end_time_s, 6)

        # 2. 保存本次 action 的完整解码日志
        try:
            save_action_decode_logs(action_log_cache, action_log_file_path)
        except Exception as e:
            print(f"save_action_decode_logs failed: {e}")

        #3. 保存结果到psychopy的数据结果文件
        #thisExp.addData("action.decode_count", action_decode_count)
        #thisExp.addData("action.decode_log_file", action_log_file_path)
        #thisExp.addData("action.start_time_s", round(action_start_time_s, 6))
        #thisExp.addData("action.end_time_s", round(action_end_time_s, 6))
        #thisExp.addData("action.duration_s", round(action_end_time_s - action_start_time_s, 6))
        #
        #if len(action_log_cache) > 0:
        #    last_row = action_log_cache[-1]
        #    thisExp.addData("action.last_data_received_time_s", last_row.get("data_received_time_s", ""))
        #    thisExp.addData("action.last_data_shape", last_row.get("data_shape", ""))
        #    thisExp.addData("action.last_preprocess_time_ms", last_row.get("preprocess_time_ms", ""))
        #    thisExp.addData("action.last_decode_time_ms", last_row.get("decode_time_ms", ""))
        #    thisExp.addData("action.last_decode_result", last_row.get("decode_result", ""))
        #    thisExp.addData("action.last_confidence", last_row.get("confidence", ""))
        #    thisExp.addData("action.last_command_sent", last_row.get("command_sent", 0))
        #    thisExp.addData("action.last_command_content", last_row.get("command_content", ""))
        #else:
        #    thisExp.addData("action.last_data_received_time_s", "")
        #    thisExp.addData("action.last_data_shape", "")
        #    thisExp.addData("action.last_preprocess_time_ms", "")
        #    thisExp.addData("action.last_decode_time_ms", "")
        #    thisExp.addData("action.last_decode_result", "")
        #    thisExp.addData("action.last_confidence", "")
        #    thisExp.addData("action.last_command_sent", 0)
        #    thisExp.addData("action.last_command_content", "")
        #
    MovieComponent act_movie
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = $act_movie_dir
      size = (1.2, 0.675)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SoundComponent act_sound
      forceEndRoutine = False
      sound [set every repeat] = $act_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine trial_over
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    CodeComponent to_code
      Code Type = Py
      Begin Routine:
        to_tex = "复位"
        to_sound_dir = os.path.join(sound_dir, "复位.wav")
    TextComponent to_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $to_tex
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    SoundComponent to_sound
      forceEndRoutine = False
      sound [set every repeat] = $to_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine inter_trial_interval
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    CodeComponent iti_code
      Code Type = Py
      Begin Routine:
        import random
        # random.seed(random_seed)
        iti_duration = random.randint(2, 10)
        print(f"iti_duration: {iti_duration}")
    TextComponent iti_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
      text = 随机休息
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  Routine block_over
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    CodeComponent bo_code
      Code Type = Py
      Begin Routine:
        bo_tex = "回合结束\n请休息"
        bo_sound_dir = os.path.join(sound_dir, "回合结束_请休息.wav")
    TextComponent bo_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $bo_tex
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    SoundComponent bo_sound
      forceEndRoutine = False
      sound [set every repeat] = $bo_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine finish
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    TextComponent finish_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 全部结束
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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Flow
  Routine init
  LoopInitiator block_loop loopType="TrialHandler"
    Selected rows = $selected_rows
    conditionsFile = $block_conditions_file
    loopType = random
    nReps = block_repeats
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    Routine block_ready
    LoopInitiator trial_loop loopType="TrialHandler"
      Selected rows = $selected_rows
      conditionsFile = $conditions_file
      loopType = random
      nReps = trial_repeats
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      Routine trial_ready
      Routine action
      Routine trial_over
      Routine inter_trial_interval
    LoopTerminator trial_loop
    Routine block_over
  LoopTerminator block_loop
  Routine finish
